PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = hw_test
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Routines
  Routine trial
    TextComponent stim
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      text [set every repeat] = $word
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent response
      allowedKeys = 'r', 'g', 'b', 'y'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    PolygonComponent sync
      fillColor = white
      pos = (1, 1)
      shape = rectangle
      size = (0.128, 0.2)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.1
      units = norm
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  Routine second
    TextComponent instruction
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Instruction:

        Each time will see one of four words red, green, blue, yellow) written using of these four colors.
        You should press the r, g, b, or y key, depending on the COLOR of the word you see, ignoring the word content.
        R and G should be pressed with a left hand and B and Y with a right. Do not remove hands from the keyboard to minimize the time needed for searching the correct key.

        Push Space to continue.
    KeyboardComponent start_init
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cross_2
    PolygonComponent cross_init
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine second
  Routine cross_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conds_colors.csv
    loopType = fullRandom
    nReps = 10
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    conditions:
      [OrderedDict([('background', 'red'), ('word', 'red'), ('ans', 'r'), ('congruent', 1)]),
      OrderedDict([('background', 'yellow'), ('word', 'yellow'), ('ans', 'y'), ('congruent', 1)]),
      OrderedDict([('background', 'green'), ('word', 'green'), ('ans', 'g'), ('congruent', 1)]),
      OrderedDict([('background', 'blue'), ('word', 'blue'), ('ans', 'b'), ('congruent', 1)]),
      OrderedDict([('background', 'red'), ('word', 'yellow'), ('ans', 'y'), ('congruent', 0)]),
      OrderedDict([('background', 'red'), ('word', 'green'), ('ans', 'g'), ('congruent', 0)]),
      OrderedDict([('background', 'red'), ('word', 'blue'), ('ans', 'b'), ('congruent', 0)]),
      OrderedDict([('background', 'yellow'), ('word', 'red'), ('ans', 'r'), ('congruent', 0)]),
      OrderedDict([('background', 'yellow'), ('word', 'green'), ('ans', 'g'), ('congruent', 0)]),
      OrderedDict([('background', 'yellow'), ('word', 'blue'), ('ans', 'b'), ('congruent', 0)]),
      OrderedDict([('background', 'green'), ('word', 'red'), ('ans', 'r'), ('congruent', 0)]),
      OrderedDict([('background', 'green'), ('word', 'yellow'), ('ans', 'y'), ('congruent', 0)]),
      OrderedDict([('background', 'green'), ('word', 'blue'), ('ans', 'b'), ('congruent', 0)]),
      OrderedDict([('background', 'blue'), ('word', 'red'), ('ans', 'r'), ('congruent', 0)]),
      OrderedDict([('background', 'blue'), ('word', 'yellow'), ('ans', 'y'), ('congruent', 0)]),
      OrderedDict([('background', 'blue'), ('word', 'green'), ('ans', 'g'), ('congruent', 0)])]
    Routine trial
  LoopTerminator trials
